PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = free recall task
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Routines
  Routine choose_block_setup
    CodeComponent code_choose_blocks
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd

        # Specify the name of the file that specifies the
        # range of trials in each block
        block_ranges = pd.read_csv('choose_blocks.csv')

        # Randomize experiment blocks
        block_ranges_exp = list(block_ranges.choose_blocks_exp)
        random.shuffle(block_ranges_exp)
  Routine resp_parti
  Routine response_participant
    KeyboardComponent key_resp_exp
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m','space','backspace','return'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    TextComponent resp_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every frame] = $resp_feedback_text
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    TextComponent text_prompt_exp
      letterHeight = 0.1
      pos = (0, .20)
      startVal [time (s)] = 0
      text = Escribe palabras:
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        resp_feedback_text = ''
      Each Frame:
        # insert the correct symbol when the participant
        # press backspace
        if "backspace" in key_resp_exp.keys:
            key_resp_exp.keys.remove("backspace")

            if len(key_resp_exp.keys) > 0:
                key_resp_exp.keys.pop()

        # insert the correct symbol when the participant
        # press space
        elif "space" in key_resp_exp.keys:
                key_resp_exp.keys.remove("space")
                key_resp_exp.keys.append(' ')

        # save results and end routine when
        # return in entered
        elif 'return' in key_resp_exp.keys:
            key_resp_exp.keys.remove('return')
            # add data to results file
            thisExp.addData('words', text_word.text)
            thisExp.addData('recall_resp_exp', resp_feedback_text)
            continueRoutine = False

        resp_feedback_text = ''.join(key_resp_exp.keys)
  Routine trial
    TextComponent text_word
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $text
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Flow
  Routine choose_block_setup
  LoopInitiator block_loops loopType="TrialHandler"
    loopType = random
    nReps = len(block_ranges_exp)
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    LoopInitiator word_list loopType="TrialHandler"
      Selected rows = $block_ranges_exp.pop()
      conditionsFile = exp_trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('text', 'negative11'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative12'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative13'), ('condition', 'negative')]),
        OrderedDict([('text', 'neutral11'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral12'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral13'), ('condition', 'neutral')]),
        OrderedDict([('text', 'positive11'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive12'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive13'), ('condition', 'positive')]),
        OrderedDict([('text', 'negative21'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative22'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative23'), ('condition', 'negative')]),
        OrderedDict([('text', 'neutral21'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral22'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral23'), ('condition', 'neutral')]),
        OrderedDict([('text', 'positive21'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive22'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive23'), ('condition', 'positive')])]
      Routine trial
    LoopTerminator word_list
    Routine response_participant
  LoopTerminator block_loops
